CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "MuSC")
    Name to assign these images:MuSC
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "laminin")
    Name to assign these images:laminin
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DNA
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:DNA_gray
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
ColorToGray:[module_num:6|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
    Select the input image:MuSC
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:MuSC_gray
    Convert blue to gray?:No
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
ColorToGray:[module_num:7|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
    Select the input image:laminin
    Conversion method:Combine
    Image type:RGB
    Name the output image:laminin_gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
MedianFilter:[module_num:8|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
    Select the input image:laminin_gray
    Name the output image:MedianFilter
    Window:3

Closing:[module_num:9|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
    Select the input image:MedianFilter
    Name the output image:Closing
    Structuring element:disk,12

EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:Closing
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:5
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Line structures
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    Rescale result image:No

ImageMath:[module_num:11|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath_laminin
    Image or measurement?:Image
    Select the first image:EnhanceOrSuppressFeatures
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:12|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
    Operation:None
    Raise the power of the result by:15
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:laminin_ImageAfterMath
    Image or measurement?:Image
    Select the first image:ImageAfterMath_laminin
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:laminin_ImageAfterMath
    Name the primary objects to be identified:laminin_Objects
    Typical diameter of objects, in pixel units (Min,Max):50,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:45
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:14|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
    Select the input objects:laminin_Objects
    Name the output image:laminin_image
    Select the color format:uint16
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:laminin_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:laminin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:DNA_gray
    Name the primary objects to be identified:DNA
    Typical diameter of objects, in pixel units (Min,Max):6,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.45
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:DNA
    Name the output image:DNA_Image
    Select the color format:uint16
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:DNA_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:MuSC_gray
    Name the primary objects to be identified:MuSC
    Typical diameter of objects, in pixel units (Min,Max):5,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.45
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
RelateObjects:[module_num:20|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
    Parent objects:DNA
    Child objects:MuSC
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:MuSC_RelateObjects
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
ConvertObjectsToImage:[module_num:21|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
    Select the input objects:MuSC_RelateObjects
    Name the output image:relate_Image_MuSC
    Select the color format:uint16
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:relate_Image_MuSC
    Select method for constructing file names:From image filename
    Select image name for file prefix:MuSC
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
